macro "hyal_save" {
// This function is used to recursively resave a nested folder system full of .nd2 multichannel images
// as individual and merged RGB Color images



// Retrieves the arguments given to the function
args = getArgument();

// If no arguments are given the user is asked to choose a directory (This should only happen when it is first run)
if (args == ""){
	args = getDirectory("Choose a Directory");
}

// Sets the directory to load the images from as the directory given as an argument
// or as the directory chosen by the user.
loadDir = args;

// checkForDone is used to determine if a directory has already been visited by the function
// Checks for the existance of an imagej folder within the given directory.
// If one exists the directory is skipped
checkForDone = 0;
if (File.exists(loadDir + "imagej\\")){
	checkForDone = 1;
}

// Creates imagej folder if one has not been created and stores the location to save images
if (checkForDone == 0) {
	saveDir = loadDir + "imagej\\";
	File.makeDirectory(saveDir);
}

// retrieves a list of the files in the folder.
fileList = getFileList(loadDir);

// Steps through the list of files. If the file is a directory the function is called again
// with the file path as the argument
for (i = 0; i < lengthOf(fileList); i++){
	if (File.isDirectory(loadDir + fileList[i]) && fileList[i] != "imagej/"){
		runMacro("hyal_save", loadDir + fileList[i]);
	} else if (endsWith(fileList[i],".nd2") && checkForDone == 0) {

// If the file is not a directory, the directory has not previously been done, and the file is a .nd2 file
// The image is opened with the bio-formats importer
		name = fileList[i];
		file = loadDir + name;
		run("Bio-Formats Importer", "open=[file] autoscale color_mode=Colorized rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT");

// The image is renamed to allow for downstream functions that would fail without a common name
		rename("temp");

// Splits the image into different channels and saves each channel individually as a RGB Color Tiff
		run("Split Channels");
		selectWindow("C4-temp");
		run("RGB Color");
		saveAs("tiff", saveDir + name + " SMA");

		selectWindow("C3-temp");
		run("RGB Color");
		saveAs("tiff", saveDir + name + " Green");

		selectWindow("C2-temp");
		run("RGB Color");
		saveAs("tiff", saveDir + name + " Dapi");

// Re-Merges the channels and saves the composite as a RGB Color Tiff
		run("Merge Channels...", "c1=[" + name + " SMA.tif] c2=[" + name + " Green.tif] c3=[" + name + " Dapi.tif] create");
		selectWindow("C1-temp");
		run("Close");
		selectWindow("Composite");
		run("RGB Color");
		saveAs("tiff", saveDir + name);
		run("Close");
	}


}
}
